# Generated by Configurator on Tue May 23 11:07:30 EDT 2023

# Reset
Property,Core,Initialize,0

# Devices
Device,COM6,SerialManager,COM6
Device,COM4,SerialManager,COM4
Device,TigerCommHub,ASITiger,TigerCommHub
Device,XYStage:XY:31,ASITiger,XYStage:XY:31
Device,ZStage:Z:32,ASITiger,ZStage:Z:32
Device,Turret:S:32,ASITiger,Turret:S:32
Device,Scanner:AB:33,ASITiger,Scanner:AB:33
Device,Scanner:CD:33,ASITiger,Scanner:CD:33
Device,PiezoStage:P:34,ASITiger,PiezoStage:P:34
Device,PiezoStage:Q:35,ASITiger,PiezoStage:Q:35
Device,PLogic:E:36,ASITiger,PLogic:E:36
Device,ZStage:V:37,ASITiger,ZStage:V:37
Device,PLogic:G:39,ASITiger,PLogic:G:39
Device,LED:X:31,ASITiger,LED:X:31
Device,HamCam1,HamamatsuHam,HamamatsuHam_DCAM
Device,HamCam2,HamamatsuHam,HamamatsuHam_DCAM
Device,Multi Camera,Utilities,Multi Camera
Device,Coherent-Scientific Remote,CoherentScientificRemote,Coherent-Scientific Remote
Device,Bottom PCO,PCO_Camera,pco_camera

# Pre-init settings for devices
Property,COM6,AnswerTimeout,500.0000
Property,COM6,BaudRate,115200
Property,COM6,DelayBetweenCharsMs,0.0000
Property,COM6,Handshaking,Off
Property,COM6,Parity,None
Property,COM6,StopBits,1
Property,COM6,Verbose,1
Property,COM6,DTR,Disable
Property,COM6,DataBits,8
Property,COM6,Fast USB to Serial,Disable
Property,COM4,AnswerTimeout,500.0000
Property,COM4,BaudRate,115200
Property,COM4,DelayBetweenCharsMs,0.0000
Property,COM4,Handshaking,Off
Property,COM4,Parity,None
Property,COM4,StopBits,1
Property,COM4,Verbose,1
Property,TigerCommHub,Port,COM4
Property,PLogic:E:36,PLogicMode,diSPIM Shutter
Property,PLogic:G:39,PLogicMode,None
Property,Coherent-Scientific Remote,Port,COM6
Property,Bottom PCO,DemoMode,Off

# Pre-init settings for COM ports

# Hub (parent) references
Parent,XYStage:XY:31,TigerCommHub
Parent,ZStage:Z:32,TigerCommHub
Parent,Turret:S:32,TigerCommHub
Parent,Scanner:AB:33,TigerCommHub
Parent,Scanner:CD:33,TigerCommHub
Parent,PiezoStage:P:34,TigerCommHub
Parent,PiezoStage:Q:35,TigerCommHub
Parent,PLogic:E:36,TigerCommHub
Parent,ZStage:V:37,TigerCommHub
Parent,PLogic:G:39,TigerCommHub
Parent,LED:X:31,TigerCommHub

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,Camera,HamCam1
Property,Core,Shutter,PLogic:E:36
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# Turret:S:32
Label,Turret:S:32,1,Position-2
Label,Turret:S:32,0,Position-1

# Configuration presets
# Group: Laser
# Preset: 637 only
ConfigGroup,Laser,637 only,PLogic:E:36,OutputChannel,output 8 only

# Preset: ALL OFF
ConfigGroup,Laser,ALL OFF,PLogic:E:36,OutputChannel,none of outputs 5-8

# Preset: 405 only 
ConfigGroup,Laser,405 only ,PLogic:E:36,OutputChannel,output 5 only

# Preset: 488 and 561
ConfigGroup,Laser,488 and 561,PLogic:E:36,OutputChannel,output 6 and 7

# Preset: 561 only
ConfigGroup,Laser,561 only,PLogic:E:36,OutputChannel,output 7 only

# Preset: ALL ON
ConfigGroup,Laser,ALL ON,PLogic:E:36,OutputChannel,outputs 5-8

# Preset: 488 only
ConfigGroup,Laser,488 only,PLogic:E:36,OutputChannel,output 6 only


# Group: 637 Power
# Preset: NewPreset
ConfigGroup,637 Power,NewPreset,Coherent-Scientific Remote,Laser 637-140C - PowerSetpoint (%),9.0909


# Group: 488 Power
# Preset: NewPreset
ConfigGroup,488 Power,NewPreset,Coherent-Scientific Remote,Laser 488-100C - PowerSetpoint (%),9.0909


# Group: System
# Preset: Startup
ConfigGroup,System,Startup,PiezoStage:P:34,MotorOnOff,On
ConfigGroup,System,Startup,PiezoStage:Q:35,MotorOnOff,On
ConfigGroup,System,Startup,HamCam1,TriggerPolarity,POSITIVE
ConfigGroup,System,Startup,HamCam2,TriggerPolarity,POSITIVE
ConfigGroup,System,Startup,Multi Camera,Physical Camera 1,HamCam1
ConfigGroup,System,Startup,Multi Camera,Physical Camera 2,HamCam2
ConfigGroup,System,Startup,Coherent-Scientific Remote,Laser 405-100C - Modulation/Trigger,External/Digital
ConfigGroup,System,Startup,Coherent-Scientific Remote,Laser 405-100C - State,On
ConfigGroup,System,Startup,Coherent-Scientific Remote,Laser 488-100C - Modulation/Trigger,External/Digital
ConfigGroup,System,Startup,Coherent-Scientific Remote,Laser 488-100C - State,On
ConfigGroup,System,Startup,Coherent-Scientific Remote,Laser 637-140C - Modulation/Trigger,External/Digital
ConfigGroup,System,Startup,Coherent-Scientific Remote,Laser 637-140C - State,On
ConfigGroup,System,Startup,Coherent-Scientific Remote,Laser OBIS LS 561-100 - Modulation/Trigger,External/Digital
ConfigGroup,System,Startup,Coherent-Scientific Remote,Laser OBIS LS 561-100 - State,On

# Preset: Shutdown
ConfigGroup,System,Shutdown,PiezoStage:P:34,MotorOnOff,Off
ConfigGroup,System,Shutdown,PiezoStage:Q:35,MotorOnOff,Off
ConfigGroup,System,Shutdown,HamCam1,TriggerPolarity,POSITIVE
ConfigGroup,System,Shutdown,HamCam2,TriggerPolarity,POSITIVE
ConfigGroup,System,Shutdown,Multi Camera,Physical Camera 1,HamCam1
ConfigGroup,System,Shutdown,Multi Camera,Physical Camera 2,HamCam2
ConfigGroup,System,Shutdown,Coherent-Scientific Remote,Laser 405-100C - Modulation/Trigger,External/Digital
ConfigGroup,System,Shutdown,Coherent-Scientific Remote,Laser 405-100C - State,Off
ConfigGroup,System,Shutdown,Coherent-Scientific Remote,Laser 488-100C - Modulation/Trigger,External/Digital
ConfigGroup,System,Shutdown,Coherent-Scientific Remote,Laser 488-100C - State,Off
ConfigGroup,System,Shutdown,Coherent-Scientific Remote,Laser 637-140C - Modulation/Trigger,External/Digital
ConfigGroup,System,Shutdown,Coherent-Scientific Remote,Laser 637-140C - State,Off
ConfigGroup,System,Shutdown,Coherent-Scientific Remote,Laser OBIS LS 561-100 - Modulation/Trigger,External/Digital
ConfigGroup,System,Shutdown,Coherent-Scientific Remote,Laser OBIS LS 561-100 - State,Off


# Group: 561 Power
# Preset: NewPreset
ConfigGroup,561 Power,NewPreset,Coherent-Scientific Remote,Laser OBIS LS 561-100 - PowerSetpoint (%),8.1743


# Group: LED
# Preset: Open
ConfigGroup,LED,Open,LED:X:31,State,Open

# Preset: Closed
ConfigGroup,LED,Closed,LED:X:31,State,Closed


# Group: 405 Power
# Preset: NewPreset
ConfigGroup,405 Power,NewPreset,Coherent-Scientific Remote,Laser 405-100C - PowerSetpoint (%),9.0909



# PixelSize settings

